
macro "Binary&AnalyzeParticles [a]"
{
fileName=getTitle();
dir = getDirectory("image");
run("Split Channels"); //to be run on Background subtracted Images
channel1Name="C1-"+fileName;
channel2Name="C2-"+fileName;
close(channel1Name);
selectWindow(channel2Name);
//Dialog.addNumber("Threshold Value?: ", 150);
//Dialog.show();
//value=Dialog.getNumber();
//getThreshold(lower, upper);
//if (lower==-1)
//	exit("Threshold was not set");
value=200;  //Change if required for experiment type, NOT within one kind of exp.
setThreshold(0,value);
run("Convert to Mask");
run("Make Binary");
ID = getImageID();
waitForUser("ROI Selection", "Select an ROI to analyze. Thereafter click OK to allow Macro to proceed");
selectImage(ID);  //make sure we still have the same image
run("Analyze Particles...",
     "size=5-100 pixel circularity=0.00-1.00 show=Outlines clear summarize");
selectWindow(channel2Name);
saveAs(dir+"/BINARY_"+ fileName);
run("Close All");
}